PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = test02_TestSegment
  Units = use prefs
  Screen = 1
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Routines
  Routine FullTest_01
    CodeComponent earn_output
      Begin Experiment:
        #earnings = -100
        #newValue = 0
      Begin Routine:
        #theseKeys=""
        #shift_flag = False

        #difference between the input value and the house value
        #currently using input from last frame for current house


        #earnings = abs(long(float(newValue)) - houseValue)
    CodeComponent earningsUpdater
      Begin Experiment:
        inputText = ""

        import random

        earnings = 0
        earningsUpdate = 0

        exp1Trial = 0

        fPosX = 250
        fPosY = 0

        mult1 = 1
        mult2 = 1

        correct =0
        winLoss = 0
      Begin Routine:
        theseKeys=""
        shift_flag = False
        #inputTextValue.alignHoriz = 'center'

        #Count Trials
        exp1Trial +=1

        #Pick random value for House and Face morph
        #This means the trials are randomized WITH replacement
        randFace = random.randint(0,100)
        randHouse = random.randint(0,100)

        #Create filepath for image
        trialFace = "images/morphs/faceMorph" + str(randFace) + ".jpg"
        trialHouse = "images/morphs/houseMorph" + str(randHouse) + ".jpg"

        #Calculate monetary value based on morph value
        actFaceVal = 1.00 - (2*randFace/100)
        actHouseVal = 1.00 - (2*randHouse/100)
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('Trial', exp1Trial)
        thisExp.addData('correct', correct)
        thisExp.addData('faceVal', actFaceVal)
        thisExp.addData('houseVal', actHouseVal)
        thisExp.addData('mult1House', mult1)
        thisExp.addData('mult2Face', mult2)
        thisExp.addData('summedVal', earningsUpdate)
        thisExp.addData('earnings', earnings)

        inputText=""

        #This is done with the next routine
        #if exp1Trial>=100:
        #    test.finished=1
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            #for ACCEPTING and starting a new loop
            if theseKeys[i] == 'f':
                earningsUpdate = actFaceVal + actHouseVal
                if earningsUpdate >=0:
                    correct=1
                else:
                    correct=0
                earnings = earnings + earningsUpdate
                winLoss=earningsUpdate
                continueRoutine = False
                break

            #for REJECTING and starting a new loop
            elif theseKeys[i] == 'j':
                earningsUpdate = actFaceVal + actHouseVal
                if (earningsUpdate) > 0:
                    correct=0
                    earnings = earnings - earningsUpdate
                    winLoss= -1*earningsUpdate #subtract incorrect rejection
                    continueRoutine = False
                else:
                    correct=1
                    winLoss = 0.00
                    continueRoutine = False
                break

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_3
      forceEndRoutine = False
      allowedKeys = "f", "j"
      startVal [time (s)] = 0
      store = all keys
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    PolygonComponent square_entry_3
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0
      size [set every repeat] = (0.25, 0.15)
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    TextComponent Accept_Reject
      text = Accept or Reject?
      pos = (0, 0.75)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest_3
      text = enter 'f' for accept, and 'j' for reject
      pos = (0, -.9)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings_
      text [set every frame] = $('\$%0.2f' %(earnings))
      pos = (0, -0.75)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.1
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    ImageComponent face_test
      pos = (250,0)
      units = pix
      startVal [time (s)] = 0
      image [set every repeat] = $trialFace
      size = (360, 360)
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    ImageComponent houses_2
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0
      image [set every repeat] = $trialHouse
      size = (360, 360)
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    TextComponent EarningsLabel
      text = total earnings
      pos = (0, -0.6)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.08
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  Routine Congrats
    TextComponent to_continue_5
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Learn_3
      text = Congratulations
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore_4
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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      text:
        You have accurately stated the values of the faces and houses.

        Now we will move on to Part 2.
  Routine TestInstr
    KeyboardComponent exitKeys
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instructions
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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      text:
        During this part of the study, you will be presented with combinations of images (e.g. one face and one house image).

        Your task will be to decide whether you would like to accept or reject the combined outcome of the two images.
    TextComponent continue9_2
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part2
      text = Part 2: Test
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine PreLearnScreen2
    TextComponent to_continue_4
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Learn_2
      text = Part 1: Houses
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_13
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore_3
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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      text:
        You will be shown a house: try to guess the value in your head.

        After a couple of seconds you will be shown the actual value.

        See how close to the actual value you can get.

        There are 10 trials.
  Routine ActualValue
    TextComponent ActVal
      color [set every repeat] = white
      text [set every repeat] = $('0.2f' %(faceValue))
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.2
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.15
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent continue3
      text = press any key to contine
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent ActualValueText
      text = Actual value was:
      pos = (0, .2)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.1
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    TextComponent youSaid
      text [set every repeat] = $inputText
      startVal [time (s)] = 1
      font = Helvetica
      letterHeight = 0.08
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  Routine Test
    CodeComponent code
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            if theseKeys[i] == 'return' and len(inputText) > 3:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1] #lose the final character
                i = i + 1

            elif theseKeys[i] == 'period':
                inputText  = inputText + "."
                i = i+1

            elif theseKeys[i] == 'minus':
                inputText  = inputText + "-"
                i = i+1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry
      forceEndRoutine = False
      allowedKeys = "1", "2", "3","4","5","6","7","8","9","0",".", "backspace", "period", "return", "-", "minus"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent EnterValue
      text = Enter the value for this face
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest
      text = after you enter a value press 'return'
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent inputTextValue
      text [set every frame] = $inputText
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    ImageComponent faces
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $faceImage
      size = (500, 500)
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    TextComponent useFormat
      text = Use the format X.XX (e.g. 2.50)
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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  Routine Part_1
    TextComponent to_continue
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent text
      text = Part 1: Learning
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine PreTestScreen
    TextComponent to_continue_2
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Test
      text = Part 1: Test
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      letterHeight = 0.08
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      text:
        You will now guess the value of images of houses and faces that have been combined to varying degrees.

        You need to acheive an average answer that is within 1 dollar of the actual value.

        Do not worry - if you do not succeed you will get to take the test again.

        There are 20 trials.
  Routine Block02_b
    KeyboardComponent numberEntry_9
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      store = all keys
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    TextComponent multInstr_4
      pos = (0, -0.22)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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      text:
        In this case, without the multiplier, the value of the face is \$0.58 and the value of the house is -\$0.92. The correct response would be to reject the combination.

        However, since there is a multiplier of x2 on the face, the value is now \$0.58 x 2 = \$1.16. This means the correct response would now be to accept the combination.


        There will be 3 blocks of 100 trials.
        You can take a short break between blocks.
    TextComponent continue4_5
      text = press any key to begin your first block of trials
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    ImageComponent mult_example
      pos = (0, 250)
      units = pix
      startVal [time (s)] = 0.5
      image = images/mult_example.png
      size = [500,275]
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  Routine TestInstr_2
    KeyboardComponent exitKeys_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent faceMorph05_2
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/morphs/faceMorph21.jpg
      size = (300,300)
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    ImageComponent houseMorph07_2
      pos = (250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/morphs/houseMorph60.jpg
      size = [300,300]
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    TextComponent instructions_2
      text = In this case the combined value of the two images is: \$0.58 - \$0.20 = \$0.38.
      pos = (0, .6)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.09
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    TextComponent faceValueText_2
      text = \$0.58
      pos = (-0.4, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent houseValue_2
      text = -\$0.20
      pos = (0.4, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent compValues_2
      text = Therefore it would make sense to accept this combination.
      pos = (0, -.65)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent continue9_3
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.06
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  Routine Block02_a
    CodeComponent earn_output_4
      Begin Experiment:
        #earnings = -100
        #newValue = 0
      Begin Routine:
        #theseKeys=""
        #shift_flag = False

        #difference between the input value and the house value
        #currently using input from last frame for current house


        #earnings = abs(long(float(newValue)) - houseValue)
    CodeComponent earningsUpdater_4
      Begin Experiment:
        inputText = ""
        earnings = 0
        earningsUpdate = 0
      Begin Routine:
        theseKeys=""
        shift_flag = False
        #inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('earnings', earnings)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            #for ACCEPTING and starting a new loop
            if theseKeys[i] == 'f':
                earningsUpdate = houseValue + faceValue
                earnings = earnings + earningsUpdate
                continueRoutine = False
                break

            #for REJECTING and starting a new loop
            elif theseKeys[i] == 'j':
                continueRoutine = False
                break

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_6
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_6
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, .37)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent multInstr
      pos = (0, 0.1)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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      text:
        You have finished the first part of the test.

        So far you have earned:





        There is one other aspect of this task that you should be aware of. The test will now be modified so that there will be a multiplier over the image of the face and house that modifies the value.

        If the multiplier is x1, then the value is the same as normal. But if the value is x2, for example, then the value (positive or negative) has doubled.

        Continue for an example.
    TextComponent continue4_2
      text = press any key to continue
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings__4
      text [set every frame] = $('\$%0.2f' %(earnings))
      pos = (0, .37)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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  Routine var_01_Instr_02
    ImageComponent image_2
      units = pix
      startVal [time (s)] = 0.0
      image = images/man02.png
      size = [500,500]
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    TextComponent text_4
      text = This face is worth -5.00 dollars
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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  Routine var_01_Instr_03
    ImageComponent man02
      pos = (300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/man02.png
      size = [250,250]
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    TextComponent text_6
      text = Combination of the two faces will give different "values".
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    ImageComponent man01
      pos = (-300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/man01.png
      size = (250,250)
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    ImageComponent man_morph50
      units = pix
      startVal [time (s)] = 3
      image = images/morphs/09.png
      size = (250,250)
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    TextComponent text_8
      text = 5.00 dollars
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent minus5
      text = -5.00 dollars
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent zeroDollar
      text = 0.00 dollars
      pos = (0, -0.4)
      startVal [time (s)] = 3.0
      font = Helvetica
      letterHeight = 0.07
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  Routine FullTest_01_Mult
    CodeComponent earn_output_2
      Begin Experiment:
        #earnings = -100
        #newValue = 0
      Begin Routine:
        #theseKeys=""
        #shift_flag = False

        #difference between the input value and the house value
        #currently using input from last frame for current house


        #earnings = abs(long(float(newValue)) - houseValue)
    CodeComponent earningsUpdater_2
      Begin Experiment:
        from random import randint
        inputText = ""

        earnings = 0
        earningsUpdate = 0
        mult1 = 1
        mult2 = 1

        earnings = 0
        earningsUpdate = 0

        exp2Trial = 0

        flip = False

        flipVersion = 1
        posNeg = 1
      Begin Routine:
        theseKeys=""
        shift_flag = False
        #inputTextValue.alignHoriz = 'center'

        #Count Trials
        exp2Trial +=1

        #flipChoice OFF
        flip = False

        #Pick random value for House and Face morph
        #This means the trials are randomized WITH replacement
        randFace = random.randint(0,100)
        randHouse = random.randint(0,100)

        #Create filepath for image
        trialFace = "images/morphs/faceMorph" + str(randFace) + ".jpg"
        trialHouse = "images/morphs/houseMorph" + str(randHouse) + ".jpg"

        #Calculate monetary value based on morph value
        actFaceVal = 1.00 - (2*randFace/100)
        actHouseVal = 1.00 - (2*randHouse/100)

        #Set Flip Trials
        flipChoice = randint(1,3)

        if flipChoice == 1:
            flipVersion = randint(1,6)
            posNeg = randint(1,2)
            flip = True


            if flipVersion == 1:  # 1/2

                if posNeg == 1: #face positive, HOUSE negative
                    randFace = randint(10,40) #values from .20 to .80
                    randHouse = 110-randFace #values opposite in sign and 0.20 higher

                if posNeg == 2: #face negative, HOUSE positive
                    randFace = randint(60,90) #values from -0.20 to -0.80
                    randHouse = 90-randFace #values opposite in sign and 0.20 higher

                #Multiplier assignment
                mult1 = str(1)
                mult2 = str(2)
                #Create filepath for image
                trialFace = "images/morphs/faceMorph" + str(randFace) + ".jpg"
                trialHouse = "images/morphs/houseMorph" + str(randHouse) + ".jpg"
                #Calculate monetary value based on morph value
                actFaceVal = 1.00 - (2*randFace/100)
                actHouseVal = 1.00 - (2*randHouse/100)


            if flipVersion == 2: # 2/1

                if posNeg == 1: #FACE positive, house negative
                    randHouse = randint(10,40) #values from .20 to .80
                    randFace = 110-randHouse #values opposite in sign and 0.20 higher

                if posNeg == 2: #FACE negative, house positive
                    randHouse = randint(60,90) #values from -0.20 to -0.80
                    randFace = 90-randHouse #values opposite in sign and 0.20 higher

                #Multiplier assignment
                mult1 = str(2)
                mult2 = str(1)
                #Create filepath for image
                trialFace = "images/morphs/faceMorph" + str(randFace) + ".jpg"
                trialHouse = "images/morphs/houseMorph" + str(randHouse) + ".jpg"
                #Calculate monetary value based on morph value
                actFaceVal = 1.00 - (2*randFace/100)
                actHouseVal = 1.00 - (2*randHouse/100)


            if flipVersion == 3: # 1/3

                if posNeg == 1: #face positive, HOUSE negative
                    randFace = randint(30,40) #values from .20 to .40
                    randHouse = 152-randFace*2 #values opposite in sign and double

                if posNeg == 2: #face negative, HOUSE positive
                    randFace = randint(60,70) #values from -0.20 to -0.40
                    randHouse = 152-randFace*2 #values opposite in sign and double

                #Multiplier assignment
                mult1 = str(1)
                mult2 = str(3)
                #Create filepath for image
                trialFace = "images/morphs/faceMorph" + str(randFace) + ".jpg"
                trialHouse = "images/morphs/houseMorph" + str(randHouse) + ".jpg"
                #Calculate monetary value based on morph value
                actFaceVal = 1.00 - (2*randFace/100)
                actHouseVal = 1.00 - (2*randHouse/100)


            if flipVersion == 4: # 3/1

                if posNeg == 1: #FACE positive, house negative
                    randHouse = randint(30,40) #values from .20 to .40
                    randFace = 152-randHouse*2 #values opposite in sign and double

                if posNeg == 2: #FACE negative, house positive
                    randHouse = randint(60,70) #values from -0.20 to -0.40
                    randFace = 152-randHouse*2 #values opposite in sign and double

                #Multiplier assignment
                mult1 = str(3)
                mult2 = str(1)
                #Create filepath for image
                trialFace = "images/morphs/faceMorph" + str(randFace) + ".jpg"
                trialHouse = "images/morphs/houseMorph" + str(randHouse) + ".jpg"
                #Calculate monetary value based on morph value
                actFaceVal = 1.00 - (2*randFace/100)
                actHouseVal = 1.00 - (2*randHouse/100)


            if flipVersion == 5: #2/3 (face becomes larger value)

                if posNeg == 1: #face positive, HOUSE negative
                    randFace = randint(10,40) #
                    randHouse = 105-randFace # Values end up being almost equal...

                if posNeg == 2: #face negative, HOUSE positive
                    randFace = randint(60,90) #values from -0.20 to -0.40
                    randHouse = 95-randFace #values opposite in sign and higher

                #Multiplier assignment
                mult1 = str(2)
                mult2 = str(3)
                #Create filepath for image
                trialFace = "images/morphs/faceMorph" + str(randFace) + ".jpg"
                trialHouse = "images/morphs/houseMorph" + str(randHouse) + ".jpg"
                #Calculate monetary value based on morph value
                actFaceVal = 1.00 - (2*randFace/100)
                actHouseVal = 1.00 - (2*randHouse/100)


            if flipVersion == 6: #3/2

                if posNeg == 1: #face positive, HOUSE negative
                    randHouse = randint(10,40) #
                    randFace = 105-randHouse # Values end up being almost equal...

                if posNeg == 2: #face negative, HOUSE positive
                    randHouse = randint(60,90) #values from -0.20 to -0.40
                    randFace = 95-randHouse #values opposite in sign and higher

                #Multiplier assignment
                mult1 = str(3)
                mult2 = str(2)
                #Create filepath for image
                trialFace = "images/morphs/faceMorph" + str(randFace) + ".jpg"
                trialHouse = "images/morphs/houseMorph" + str(randHouse) + ".jpg"
                #Calculate monetary value based on morph value
                actFaceVal = 1.00 - (2*randFace/100)
                actHouseVal = 1.00 - (2*randHouse/100)


        if flipChoice > 1:
            flip = False

            #Set value of first multiplier
            #House Mult
            mult1 = randint(2,8) #2/7 chance of multiplier
            if mult1 < 4:
                mult1 = str(mult1)
            else:
                mult1 = str(1)

            #Set value of second multiplier
            #Face Mult
            mult2 = randint(2,8) #2/7 chance of multiplier (therefore chance of no mult = 5/7 * 5/7 = 25/49)
            if mult2 < 4:
                mult2 = str(mult2)
            else:
                mult2 = str(1)
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('Trial', exp2Trial)
        thisExp.addData('correct', correct)
        thisExp.addData('faceVal', actFaceVal)
        thisExp.addData('houseVal', actHouseVal)
        thisExp.addData('mult1House', mult1)
        thisExp.addData('mult2Face', mult2)
        thisExp.addData('summedVal', earningsUpdate)
        thisExp.addData('earnings', earnings)
        thisExp.addData('flip', flipChoice)
        inputText=""

        #done with the next routine
        #if exp2Trial>=200:
        #    trials_2.finished=1
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            #for ACCEPTING and starting a new loop
            if theseKeys[i] == 'f':
                earningsUpdate = actHouseVal*long(mult1) + actFaceVal*long(mult2)
                if earningsUpdate >=0:
                    correct=1
                else:
                    correct=0
                earnings = earnings + earningsUpdate
                winLoss=earningsUpdate
                continueRoutine = False
                break

            #for REJECTING and starting a new loop
            elif theseKeys[i] == 'j':
                earningsUpdate = actHouseVal*long(mult1) + actFaceVal*long(mult2)
                if earningsUpdate >0:
                    correct=0
                    winLoss= -1*earningsUpdate
                    earnings = earnings - earningsUpdate
                    continueRoutine = False
                else:
                    correct=1
                    winLoss= 0.00
                    continueRoutine = False
                break

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_4
      forceEndRoutine = False
      allowedKeys = "f", "j"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_4
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent Accept_Reject_2
      text = Do you accept or reject this combination?
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest_4
      text = enter 'f' for accept, and 'j' for reject
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings__2
      text [set every frame] = $('\$%0.2f' %(earnings))
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Fixation_4
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    ImageComponent face_test_2
      pos = (250, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $trialFace
      size = (360, 360)
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    ImageComponent houses_3
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $trialHouse
      size = (360, 360)
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    TextComponent EarningsLabel_2
      text = total earnings
      pos = (0, -0.6)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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    TextComponent Mult1
      color = black
      text [set every repeat] = $('x' + mult1)
      pos = (-.4, 0.52)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.15
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    TextComponent Mult2
      color = black
      text [set every repeat] = $('x' + mult2)
      pos = (0.4, 0.52)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.15
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  Routine testHouse
    CodeComponent code_2
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            if theseKeys[i] == 'return' and len(inputText) > 3:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1] #lose the final character
                i = i + 1

            elif theseKeys[i] == 'period':
                inputText  = inputText + "."
                i = i+1

            elif theseKeys[i] == 'minus':
                inputText  = inputText + "-"
                i = i+1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_2
      forceEndRoutine = False
      allowedKeys = "1", "2", "3","4","5","6","7","8","9","0",".", "backspace", "period", "return", "-", "minus"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_2
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent EnterValue_2
      text = Enter the value for this house
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest_2
      text = after you enter a value press 'return'
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent inputTextValue_2
      text [set every frame] = $inputText
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    ImageComponent houses
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $houseImage
      size = (480, 360)
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    TextComponent useFormat_2
      text = Use the format X.XX (e.g. 2.50)
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Fixation_2
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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  Routine ActValueHouse
    TextComponent ActVal_2
      color [set every repeat] = white
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.2
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.15
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      text [set every repeat]:
        $houseValue
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent continue3_2
      text = press any key to contine
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent ActualValueText_2
      text = Actual value was:
      pos = (0, .2)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.1
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    TextComponent youSaid_2
      text [set every repeat] = $inputText
      startVal [time (s)] = 1
      font = Helvetica
      letterHeight = 0.08
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  Routine houseLearnInstr
    ImageComponent House01
      pos = (300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/morphs/House10.png
      size = [240,180]
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    TextComponent text_9
      text = Also, houses and "combinations" of two houses will give different values.
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent continue9
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    ImageComponent man01_2
      pos = (-300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/morphs/House01.png
      size = (240,180)
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    ImageComponent man_morph50_2
      units = pix
      startVal [time (s)] = 3
      image = images/morphs/House05.png
      size = (240,180)
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    TextComponent text_11
      text = 5.00 dollars
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent minus5_2
      text = -5.00 dollars
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent zeroDollar_2
      text = 0.00 dollars
      pos = (0, -0.4)
      startVal [time (s)] = 3.0
      font = Helvetica
      letterHeight = 0.07
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  Routine PreLearnScreen
    TextComponent to_continue_3
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Learn
      text = Part 1: Faces
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore_2
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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      text:
        You will be shown a face: try to guess the value in your head.

        After a couple of seconds you will be shown the actual value.

        See how close to the actual value you can get.

        There are 10 trials.
  Routine Part1_Houses
    ImageComponent House_morphs
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $houseImage
      size = (480, 360)
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    TextComponent fixation_2
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent TopText_2
      text = The value of this house is:
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Value_2
      text [set every repeat] = $('%0.2f' %(houseValue))
      pos = (0, -0.75)
      startVal [time (s)] = 3
      font = Helvetica
      letterHeight = 0.1
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    TextComponent continueOn_2
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 3.5
      font = Helvetica
      letterHeight = 0.07
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  Routine Prac1Instr
    KeyboardComponent exitKeys_4
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instructions_4
      text = Practice placeholder text...
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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    TextComponent continue9_5
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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  Routine Block03
    KeyboardComponent numberEntry_7
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_7
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, .30)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent multInstr_2
      pos = (0, 0.1)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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      text:
        You have finished the block. So far you have earned:





        You now have 2 more blocks of 100 trials remaining.

        Take a short break and then press any key to continue.
    TextComponent continue4_3
      text = press any key to continue
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings__5
      text [set every frame] = $('\$%0.2f' %(earnings))
      pos = (0, .30)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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  Routine FinalScore
    CodeComponent earn_output_3
      Begin Experiment:
        #earnings = -100
        #newValue = 0
      Begin Routine:
        #theseKeys=""
        #shift_flag = False

        #difference between the input value and the house value
        #currently using input from last frame for current house


        #earnings = abs(long(float(newValue)) - houseValue)
    CodeComponent earningsUpdater_3
      Begin Experiment:
        inputText = ""
        earnings = 0
        earningsUpdate = 0
      Begin Routine:
        theseKeys=""
        shift_flag = False
        #inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('earnings', earnings)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            #for ACCEPTING and starting a new loop
            if theseKeys[i] == 'f':
                earningsUpdate = houseValue + faceValue
                earnings = earnings + earningsUpdate
                continueRoutine = False
                break

            #for REJECTING and starting a new loop
            elif theseKeys[i] == 'j':
                continueRoutine = False
                break

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_5
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_5
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, 0)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.5, 0.3)
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    TextComponent FinalEarnings
      text = FINAL EARNINGS
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.15
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    TextComponent continue4
      text = TELL THE EXPERIMENTER YOU HAVE FINISHED
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings__3
      text [set every frame] = $('\$%0.2f' %(earnings))
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.25
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  Routine FixationCross
    TextComponent FixationCrossJitter
      text = +
      stopVal [time (s)] = 3
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    CodeComponent code_5
      Begin Experiment:
        import random
      Each Frame:
        core.wait(random.uniform(0.0, 0.8))
        break
  Routine Block04
    CodeComponent earn_output_6
      Begin Experiment:
        #earnings = -100
        #newValue = 0
      Begin Routine:
        #theseKeys=""
        #shift_flag = False

        #difference between the input value and the house value
        #currently using input from last frame for current house


        #earnings = abs(long(float(newValue)) - houseValue)
    CodeComponent earningsUpdater_6
      Begin Experiment:
        inputText = ""
        earnings = 0
        earningsUpdate = 0
      Begin Routine:
        theseKeys=""
        shift_flag = False
        #inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('earnings', earnings)
        inputText=""
      Each Frame:
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    KeyboardComponent numberEntry_8
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_8
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, .30)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent multInstr_3
      pos = (0, 0.1)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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      text:
        You have finished the block. So far you have earned:





        You now have 1 more block of 100 trials remaining.

        Take a short break and then press any key to continue.
    TextComponent continue4_4
      text = press any key to continue
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings__6
      text [set every frame] = $('\$%0.2f' %(earnings))
      pos = (0, .30)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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  Routine Feedback_Block4
    TextComponent amount_4
      text [set every repeat] = $('\$%0.2f' %(winLoss))
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_7
      End Routine:
        if exp2Trial>=100: #change to 100
            trials_3.finished=1
      Each Frame:
        if winLoss >= 0.0:
            correct = "CORRECT"
            correctColor = "green"
        else:
            correct = "INCORRECT"
            correctColor = "red"
    TextComponent text_17
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1.5
      font = Helvetica
      letterHeight = 0.2
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    TextComponent text_18
      text = Trial Earnings
      stopVal [duration (s)] = 1.5
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Correct_wrong2_3
      color [set every frame] = $correctColor
      text [set every frame] = $correct
      stopVal [duration (s)] = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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  Routine Feedback_Block2
    TextComponent amount_2
      text [set every repeat] = $('\$%0.2f' %(winLoss))
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_4
      End Routine:
        if exp2Trial>=100: #change to 100
            exp2Trial =0
            trials_2.finished=1
      Each Frame:
        if winLoss >= 0.0:
            correct = "CORRECT"
            correctColor = "green"
        else:
            correct = "INCORRECT"
            correctColor = "red"
    TextComponent text_13
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1.5
      font = Helvetica
      letterHeight = 0.2
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    TextComponent text_14
      text = Trial Earnings
      stopVal [duration (s)] = 1.5
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Correct_wrong2
      color [set every frame] = $correctColor
      text [set every frame] = $correct
      stopVal [duration (s)] = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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  Routine Feedback_Block3
    TextComponent amount_3
      text [set every repeat] = $('\$%0.2f' %(winLoss))
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_6
      End Routine:
        if exp2Trial>=100: #change to 100
            exp2Trial = 0
            trials.finished=1
      Each Frame:
        if winLoss >= 0.0:
            correct = "CORRECT"
            correctColor = "green"
        else:
            correct = "INCORRECT"
            correctColor = "red"
    TextComponent text_15
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1.5
      font = Helvetica
      letterHeight = 0.2
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    TextComponent text_16
      text = Trial Earnings
      stopVal [duration (s)] = 1.5
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Correct_wrong2_2
      color [set every frame] = $correctColor
      text [set every frame] = $correct
      stopVal [duration (s)] = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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  Routine Test1_WinLoss
    TextComponent amount
      text [set every repeat] = $('\$%0.2f' %(winLoss))
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    CodeComponent code_3
      Begin Experiment:
        correctColor = "white"
      End Routine:
        if exp1Trial>=100:  #change to 100
            test.finished=1
      Each Frame:
        if winLoss >= 0.0:
            correct = "CORRECT"
            correctColor = "green"
        else:
            correct = "INCORRECT"
            correctColor = "red"
    TextComponent text_12
      text = Trial Earnings:
      stopVal [duration (s)] = 1.5
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    TextComponent text_10
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1.5
      font = Helvetica
      letterHeight = 0.2
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    TextComponent correct_wrong
      color [set every frame] = $correctColor
      text [set every frame] = $correct
      stopVal [duration (s)] = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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  Routine trial
    TextComponent Instructions
      text [set every repeat] = $instr
      startVal [time (s)] = 0.3
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent press_key
      text [set every repeat] = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.3
      font = Helvetica
      letterHeight = 0.07
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  Routine Part_1_Faces
    ImageComponent face_morphs
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $faceImage
      size = (500, 500)
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    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent TopText
      text = The value of this face is:
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Value
      text [set every repeat] = $('%0.2f' %(faceValue))
      pos = (0, -0.75)
      startVal [time (s)] = 3
      font = Helvetica
      letterHeight = 0.1
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    TextComponent continueOn
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 3.5
      font = Helvetica
      letterHeight = 0.07
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  Routine Block01
    KeyboardComponent exitKeys_3
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instructions_3
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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      text:
        The test will now begin.

        Try to accumulate as much money as possible.

        A running total of your earnings will be shown on screen.

        There will be 100 trials in this first segment.
    TextComponent continue9_4
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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Flow
  Routine TestInstr
  Routine TestInstr_2
  Routine Block01
  LoopInitiator test loopType="TrialHandler"
    conditionsFile = part1.xlsx
    loopType = random
    nReps = 20
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    conditions:
      [{u'houseImage': u'images/morphs/House03.png', u'word': u'Enter the value of the face:', u'houseValue': 3.05, u'morph': 0L, u'percent': 0L, u'faceValue': 5L, u'faceImage': u'images/morphs/01.png'},
      {u'houseImage': u'images/morphs/House06.png', u'word': u'Enter the value of the face:', u'houseValue': -0.75, u'morph': 10L, u'percent': 1L, u'faceValue': 4L, u'faceImage': u'images/morphs/03.png'},
      {u'houseImage': u'images/morphs/House10.png', u'word': u'Enter the value of the face:', u'houseValue': -5L, u'morph': 21L, u'percent': 2.1, u'faceValue': 2.9, u'faceImage': u'images/morphs/05.png'},
      {u'houseImage': u'images/morphs/House01.png', u'word': u'Enter the value of the face:', u'houseValue': 5L, u'morph': 32L, u'percent': 3.2, u'faceValue': 1.7999999999999998, u'faceImage': u'images/morphs/07.png'},
      {u'houseImage': u'images/morphs/House08.png', u'word': u'Enter the value of the face:', u'houseValue': -3.15, u'morph': 43L, u'percent': 4.3, u'faceValue': 0.7000000000000002, u'faceImage': u'images/morphs/09.png'},
      {u'houseImage': u'images/morphs/House04.png', u'word': u'Enter the value of the face:', u'houseValue': 2.1, u'morph': 49L, u'percent': 4.9, u'faceValue': 0.09999999999999964, u'faceImage': u'images/morphs/10.png'},
      {u'houseImage': u'images/morphs/House09.png', u'word': u'Enter the value of the face:', u'houseValue': -4.2, u'morph': 62L, u'percent': 6.2, u'faceValue': -1.2000000000000002, u'faceImage': u'images/morphs/12.png'}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
    Routine FixationCross
    Routine FullTest_01
    Routine Test1_WinLoss
  LoopTerminator test
  Routine Block02_a
  Routine Block02_b
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = part1.xlsx
    loopType = random
    nReps = 50
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    conditions:
      [{u'houseImage': u'images/morphs/House03.png', u'word': u'Enter the value of the face:', u'houseValue': 3.05, u'morph': 0L, u'percent': 0L, u'faceValue': 5L, u'faceImage': u'images/morphs/01.png'},
      {u'houseImage': u'images/morphs/House06.png', u'word': u'Enter the value of the face:', u'houseValue': -0.75, u'morph': 10L, u'percent': 1L, u'faceValue': 4L, u'faceImage': u'images/morphs/03.png'},
      {u'houseImage': u'images/morphs/House10.png', u'word': u'Enter the value of the face:', u'houseValue': -5L, u'morph': 21L, u'percent': 2.1, u'faceValue': 2.9, u'faceImage': u'images/morphs/05.png'},
      {u'houseImage': u'images/morphs/House01.png', u'word': u'Enter the value of the face:', u'houseValue': 5L, u'morph': 32L, u'percent': 3.2, u'faceValue': 1.7999999999999998, u'faceImage': u'images/morphs/07.png'},
      {u'houseImage': u'images/morphs/House08.png', u'word': u'Enter the value of the face:', u'houseValue': -3.15, u'morph': 43L, u'percent': 4.3, u'faceValue': 0.7000000000000002, u'faceImage': u'images/morphs/09.png'},
      {u'houseImage': u'images/morphs/House04.png', u'word': u'Enter the value of the face:', u'houseValue': 2.1, u'morph': 49L, u'percent': 4.9, u'faceValue': 0.09999999999999964, u'faceImage': u'images/morphs/10.png'},
      {u'houseImage': u'images/morphs/House09.png', u'word': u'Enter the value of the face:', u'houseValue': -4.2, u'morph': 62L, u'percent': 6.2, u'faceValue': -1.2000000000000002, u'faceImage': u'images/morphs/12.png'}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
    Routine FixationCross
    Routine FullTest_01_Mult
    Routine Feedback_Block2
  LoopTerminator trials_2
  Routine Block03
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = part1.xlsx
    loopType = random
    nReps = 50
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    conditions:
      [{u'houseImage': u'images/morphs/House03.png', u'word': u'Enter the value of the face:', u'houseValue': 0.61, u'morph': 0L, u'percent': 0L, u'faceValue': 1L, u'faceImage': u'images/morphs/faceMorph1.jpg'},
      {u'houseImage': u'images/morphs/House06.png', u'word': u'Enter the value of the face:', u'houseValue': -0.15, u'morph': 10L, u'percent': 1L, u'faceValue': 0.8, u'faceImage': u'images/morphs/faceMorph10.jpg'},
      {u'houseImage': u'images/morphs/House10.png', u'word': u'Enter the value of the face:', u'houseValue': -1L, u'morph': 21L, u'percent': 2.1, u'faceValue': 0.58, u'faceImage': u'images/morphs/faceMorph21.jpg'},
      {u'houseImage': u'images/morphs/House01.png', u'word': u'Enter the value of the face:', u'houseValue': 1L, u'morph': 32L, u'percent': 3.2, u'faceValue': 0.36, u'faceImage': u'images/morphs/faceMorph32.jpg'},
      {u'houseImage': u'images/morphs/House08.png', u'word': u'Enter the value of the face:', u'houseValue': -0.63, u'morph': 43L, u'percent': 4.3, u'faceValue': 0.14000000000000004, u'faceImage': u'images/morphs/faceMorph43.jpg'},
      {u'houseImage': u'images/morphs/House04.png', u'word': u'Enter the value of the face:', u'houseValue': 0.42, u'morph': 49L, u'percent': 4.9, u'faceValue': 0.019999999999999928, u'faceImage': u'images/morphs/faceMorph49.jpg'},
      {u'houseImage': u'images/morphs/House09.png', u'word': u'Enter the value of the face:', u'houseValue': -0.84, u'morph': 62L, u'percent': 6.2, u'faceValue': -0.24000000000000005, u'faceImage': u'images/morphs/faceMorph62.jpg'}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
    Routine FixationCross
    Routine FullTest_01_Mult
    Routine Feedback_Block3
  LoopTerminator trials
  Routine Block04
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = part1.xlsx
    loopType = random
    nReps = 50
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    conditions:
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    Routine FixationCross
    Routine FullTest_01_Mult
    Routine Feedback_Block4
  LoopTerminator trials_3
  Routine FinalScore
