PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = test02
  Screen = 1
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Routines
  Routine FullTest_01
    CodeComponent earn_output
      Begin Experiment:
        #earnings = -100
        #newValue = 0
      Begin Routine:
        #theseKeys=""
        #shift_flag = False

        #difference between the input value and the house value
        #currently using input from last frame for current house


        #earnings = abs(long(float(newValue)) - houseValue)
    CodeComponent earningsUpdater
      Begin Experiment:
        inputText = ""
        earnings = 0
        earningsUpdate = 0
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('earnings', earnings)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            #for ACCEPTING and starting a new loop
            if theseKeys[i] == 'f':
                earningsUpdate = houseValue + faceValue
                earnings = earnings + earningsUpdate
                continueRoutine = False
                break

            #for REJECTING and starting a new loop
            elif theseKeys[i] == 'j':
                continueRoutine = False
                break

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_3
      forceEndRoutine = False
      allowedKeys = "f", "j"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_3
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent Accept_Reject
      text = Do you accept or reject this combination?
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest_3
      text = enter 'f' for accept, and 'j' for reject
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings_
      text [set every frame] = $('%0.2f' %(earnings))
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Fixation_3
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    ImageComponent face_test
      pos = (250, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $faceImage
      size = (360, 360)
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    ImageComponent houses_2
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $houseImage
      size = (480, 360)
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    TextComponent EarningsLabel
      text = earnings
      pos = (0, -0.6)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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  Routine bad_house
    ImageComponent lose_one_house
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $house_df.exemplar[100]
      size = [360,360]
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    TextComponent lose_one_2
      text = If you see this house that means you will lose \$1.00.
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_17
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_10
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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  Routine good_face
    ImageComponent win_one_face
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $face_df.exemplar[0]
      size = [360,360]
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    TextComponent win_one
      text = If you see this face that means you will win \$1.00.
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent continueKey
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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  Routine Congrats
    TextComponent to_continue_5
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Learn_3
      text = Congratulations
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore_4
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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      text:
        You have accurately stated the values of the faces and houses.

        Now we will move on to Part 2.
  Routine PreLearnScreen2
    TextComponent to_continue_4
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Learn_2
      text = Part 1: Houses
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_13
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore_3
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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      text:
        You will be shown a house: try to guess the value in your head.

        After a couple of seconds you will be shown the actual value.

        See how close to the actual value you can get.

        There are 10 trials.
  Routine ActualValue
    TextComponent ActVal
      color [set every repeat] = white
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.2
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.15
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      text [set every repeat]:
        ("\$%0.2f" % $actFaceVal)
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent continue3
      text = press any key to contine
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent ActualValueText
      text = Actual value was:
      pos = (0, .2)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.1
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    TextComponent youSaid
      text [set every repeat] = $inputText
      startVal [time (s)] = 1
      font = Helvetica
      letterHeight = 0.08
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    TextComponent AvgError
      color = black
      text [set every repeat] = ("Average error: \$%0.2f" % $avgError)
      pos = (0, -0.4)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.1
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    TextComponent RoundNumber_b
      color = black
      text [set every repeat] = ("Round %i" % $roundNumber)
      pos = (-0.75, 0.85)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.15
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  Routine Test
    CodeComponent code
      Begin Experiment:
        import random

        inputText = ""

        testNumber = 0
        totalError = 0
        avgError = 0
        actualValue = 0
        error = 0
        roundNumber = 1
        nRepsCorrect = 0
        # randFace = random.randint(1,100)
        # trialFace = "images/morphs/faceMorph" + str(randFace) + ".jpg"

        # randHouse = 0
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'

        testNumber+=1

        randFace = random.randint(1,100)
        randHouse = random.randint(1,100)

        trialFace = face_df.exemplar[randFace]
        trialHouse = house_df.exemplar[randHouse]

        actFaceVal = face_df.value[randFace]
        actHouseVal = house_df.value[randHouse]
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('inputText', inputText)

        error = abs(float(inputText) - actFaceVal)
        totalError = totalError+error
        avgError = totalError/testNumber

        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            if theseKeys[i] == 'return' and len(inputText) > 3:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1] #lose the final character
                i = i + 1

            elif theseKeys[i] == 'period':
                inputText  = inputText + "."
                i = i+1

            elif theseKeys[i] == 'minus':
                inputText  = inputText + "-"
                i = i+1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry
      forceEndRoutine = False
      allowedKeys = "1", "2", "3","4","5","6","7","8","9","0",".", "backspace", "period", "return", "-", "minus"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent EnterValue
      text = Enter the value for this face
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest
      text = after you enter a value press 'Enter'
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent inputTextValue
      text [set every frame] = $inputText
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    ImageComponent faces
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $trialFace
      size = (500, 500)
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    TextComponent useFormat
      text = Use the format X.XX (e.g. -0.50)
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    TextComponent RoundNumber
      color = black
      text [set every repeat] = ("Round %i" % $roundNumber)
      pos = (-0.75, 0.85)
      startVal [time (s)] = 0.5
      font = helvetica
      letterHeight = 0.15
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  Routine Part_1
    TextComponent to_continue
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent text
      text = Part 1: Learning
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent code_4
      Begin Experiment:
        import random
        from random import randint
        import pandas as pd
        import itertools
        inputText = ""

        earnings = 0
        earningsUpdate = 0

        mult1 = 1
        mult2 = 1
        switchMult = 1 #for image switch version

        exp2Trial = 0
        counter = 0

        flipVersion = 1
        posNeg = 1

        # Create House and Face Distributions
        import glob
        face_list = sorted(glob.glob('images/morphs/face/*.jpg'))
        house_list = sorted(glob.glob('images/morphs/house/*.jpg'))


        # create values to match to stimuli
        values = np.arange(-1.,1.01,0.02)
        # REVERSE values
        values = values * -1

        # Get rid of extra digits
        for i in range(len(values)):
            values[i] = round(values[i], 2)

        # Create Data Frames
        house_df = pd.DataFrame(
            {'value': values,
             'exemplar': house_list
            })

        face_df = pd.DataFrame(
            {'value': values,
             'exemplar': face_list
            })

        # Create mult value list
        multipliers = [0.1, 0.5, 1,2,3, 10]
        # Create mult vals distribution
        mult_vals = list(itertools.product(multipliers, multipliers))
        mult_vals = np.repeat(mult_vals, 8, axis=0) # duplicate values * simsPerVal
        extra_base_val = np.repeat([[1,1]], 112, axis=0) # extra instances of base val [1,1] to add up to 120 total

        # append extra 112 base value instances. Result = 30% base value, 70% with multipliers
        # Of those with multipliers: 1/36 of each permutation
        mult_vals_dist = np.append(mult_vals, extra_base_val, axis=0)
        # shuffle the elements
        np.random.shuffle(mult_vals_dist)

        # create mult val counter
        mult_val_counter = 25   # this is just for the test trials
                                # it is reset to 0 after the test trials

        #For alternating the image
        trialImage = '/Users/djw/Dropbox/PHD/CENDRI/Project/Code/LabSharedFolder/MADE01/CODE/v3_FractionalWeights/images/morphs/face/faceMorph000.jpg' # this just initializes an image
        imageSelector = randint(1,2)
  Routine PreTestScreen
    TextComponent to_continue_2
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Test
      text = Part 1: Test
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent minScore
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      letterHeight = 0.08
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      text:
        You will now guess the value of images of houses and faces that have been combined to varying degrees.

        You need to acheive an average answer that is within \$0.20 of the actual value over the course of 20 trials.

        Do not worry - if you do not succeed your will simply repeat the test (you have 5 chances).
  Routine TestInstr_2
    KeyboardComponent exitKeys_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent faceMorph05_2
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/morphs/05.png
      size = (300,300)
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    ImageComponent houseMorph07_2
      pos = (250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/morphs/House07.png
      size = [400,300]
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    TextComponent instructions_2
      text = In this case the combined value of the two images is: 2.90 -1.95 = 0.95.
      pos = (0, .6)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.09
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    TextComponent faceValueText_2
      text = 2.90 dollars
      pos = (-0.4, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent houseValue_2
      text = -1.95 dollars
      pos = (0.4, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent compValues_2
      text = Therefore it would make sense to accept this combination.
      pos = (0, -.65)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent continue9_3
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.06
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  Routine TestInstr_3
    KeyboardComponent exitKeys_3
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instructions_3
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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      text:
        The test will now begin.

        Try to accumulate as much money as possible.


        There will be 20 trials.
    TextComponent continue9_4
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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  Routine good_house
    ImageComponent win_one_house
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $house_df.exemplar[0]
      size = [360,360]
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    TextComponent win_one_2
      text = If you see this house that means you will win \$1.00.
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_16
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent continueKey_2
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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  Routine bad_face
    ImageComponent lose_one_face
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $face_df.exemplar[100]
      size = [360,360]
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    TextComponent lose_one
      text = If you see this face that means you will lose \$1.00.
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_5
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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  Routine FullTest_01_Mult
    CodeComponent earn_output_2
      Begin Experiment:
        #earnings = -100
        #newValue = 0
      Begin Routine:
        #theseKeys=""
        #shift_flag = False

        #difference between the input value and the house value
        #currently using input from last frame for current house


        #earnings = abs(long(float(newValue)) - houseValue)
    CodeComponent earningsUpdater_2
      Begin Experiment:
        from random import randint
        inputText = ""
        earnings = 0
        earningsUpdate = 0
        mult1 = 1
        mult2 = 1
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'

        #set value of first multiplier
        mult1 = randint(1,10)
        if mult1 < 4:
            mult1 = str(mult1)
        else:
            mult1 = str(1)

        #set value of second multiplier
        mult2 = randint(1,10)
        if mult2 < 4:
            mult2 = str(mult2)
        else:
            mult2 = str(1)
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('earnings', earnings)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            #for ACCEPTING and starting a new loop
            if theseKeys[i] == 'f':
                earningsUpdate = houseValue*long(mult1) + faceValue*long(mult2)
                earnings = earnings + earningsUpdate
                continueRoutine = False
                break

            #for REJECTING and starting a new loop
            elif theseKeys[i] == 'j':
                continueRoutine = False
                break

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_4
      forceEndRoutine = False
      allowedKeys = "f", "j"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_4
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent Accept_Reject_2
      text = Do you accept or reject this combination?
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest_4
      text = enter 'f' for accept, and 'j' for reject
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings__2
      text [set every frame] = $('%0.2f' %(earnings))
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Fixation_4
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    ImageComponent face_test_2
      pos = (250, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $faceImage
      size = (360, 360)
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    ImageComponent houses_3
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $houseImage
      size = (480, 360)
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    TextComponent EarningsLabel_2
      text = earnings
      pos = (0, -0.6)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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    TextComponent Mult1
      color = red
      text [set every repeat] = $('x' + mult1)
      pos = (-.4, 0.52)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.15
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    TextComponent Mult2
      color = black
      text [set every repeat] = $('x' + mult2)
      pos = (0.4, 0.52)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.15
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  Routine testHouse
    CodeComponent code_2
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'

        testNumber+=1
        actualValue = houseValue
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('inputText', inputText)

        error = abs(float(inputText) - actHouseVal)
        totalError = totalError+error
        avgError = totalError/testNumber

        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            if theseKeys[i] == 'return' and len(inputText) > 3:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1] #lose the final character
                i = i + 1

            elif theseKeys[i] == 'period':
                inputText  = inputText + "."
                i = i+1

            elif theseKeys[i] == 'minus':
                inputText  = inputText + "-"
                i = i+1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_2
      forceEndRoutine = False
      allowedKeys = "1", "2", "3","4","5","6","7","8","9","0",".", "backspace", "period", "return", "-", "minus"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_2
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent EnterValue_2
      text = Enter the value for this house
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest_2
      text = after you enter a value press 'return'
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent inputTextValue_2
      text [set every frame] = $inputText
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    ImageComponent houses
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $trialHouse
      size = (480, 480)
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    TextComponent useFormat_2
      text = Use the format X.XX (e.g. 0.50)
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Fixation_2
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    TextComponent RoundNumber_c
      color = black
      text [set every repeat] = ("Round %i" % $roundNumber)
      pos = (-0.75, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.15
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  Routine ActValueHouse
    TextComponent ActVal_2
      color [set every repeat] = white
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.2
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.15
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      text [set every repeat]:
        ("\$%0.2f" % $actHouseVal)
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent continue3_2
      text = press any key to contine
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent ActualValueText_2
      text = Actual value was:
      pos = (0, .2)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.1
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    TextComponent youSaid_2
      text [set every repeat] = $inputText
      startVal [time (s)] = 1
      font = Helvetica
      letterHeight = 0.08
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    TextComponent avgError2
      color = black
      text [set every repeat] = ("Average error: \$%0.2f" % $avgError)
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    CodeComponent code_3
      End Routine:
        if testNumber>=20 and avgError>0.20:
            testNumber = 0
            avgError = 0
            totalError = 0
            roundNumber +=1
        elif testNumber>=20 and avgError<=0.20:
            nRepsCorrect = 1
            test_faceValue.finished=1

        # if they have not passed in five trials then kick them out...
        if roundNumber == 6:
            test_faceValue.finished=1
            nRepsCorrect = 0
    TextComponent roundNumber_d
      color = black
      text [set every repeat] = ("Round %i" % $roundNumber)
      pos = (-0.75, 0.85)
      startVal [time (s)] = 0.2
      letterHeight = 0.15
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  Routine morph_face
    ImageComponent man02
      pos = (300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $face_df.exemplar[100]
      size = [250,250]
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    TextComponent text_6
      text = Blends of the two faces will give corresponding values.
      pos = (0, .7)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      store = nothing
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    TextComponent text_7
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 2.5
      font = Helvetica
      letterHeight = 0.07
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    ImageComponent man01
      pos = (-300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $face_df.exemplar[0]
      size = (250,250)
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    ImageComponent man_morph50
      units = pix
      startVal [time (s)] = 2
      image [set every repeat] = $face_df.exemplar[50]
      size = (250,250)
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    TextComponent text_8
      text = \$1.00
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent minus5
      text = -\$1.00
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent zeroDollar
      text = \$0.00
      pos = (0, -0.4)
      startVal [time (s)] = 2
      font = Helvetica
      letterHeight = 0.07
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  Routine PreLearnScreen
    TextComponent to_continue_3
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Learn
      text = Part 1: Faces
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore_2
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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      text:
        You will be shown a face: try to guess the value in your head.

        After a couple of seconds you will be shown the actual value.

        See how close to the actual value you can get.

        There are 10 trials.
  Routine Part1_Houses
    ImageComponent House_morphs
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $houseImage
      size = (480, 360)
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    TextComponent fixation_2
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent TopText_2
      text = The value of this house is:
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Value_2
      text [set every repeat] = $('%0.2f' %(houseValue))
      pos = (0, -0.75)
      startVal [time (s)] = 3
      font = Helvetica
      letterHeight = 0.1
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    TextComponent continueOn_2
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 3.5
      font = Helvetica
      letterHeight = 0.07
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  Routine morph_house
    ImageComponent House01
      pos = (300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $house_df.exemplar[100]
      size = [250,250]
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    TextComponent text_9
      text = Similarly, blends of houses are also valued depending on the amount of each house in the blend.
      pos = (0, .70)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      store = nothing
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    TextComponent continue9
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 2.5
      font = Helvetica
      letterHeight = 0.07
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    ImageComponent man01_2
      pos = (-300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $house_df.exemplar[0]
      size = [250,250]
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    ImageComponent man_morph50_2
      units = pix
      startVal [time (s)] = 2
      image [set every repeat] = $house_df.exemplar[50]
      size = [250,250]
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    TextComponent text_11
      text = \$1.00
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent minus5_2
      text = -\$1.00
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent zeroDollar_2
      text = \$0.00
      pos = (0, -0.4)
      startVal [time (s)] = 2
      font = Helvetica
      letterHeight = 0.07
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  Routine Part_1_Faces
    ImageComponent face_morphs
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $faceImage
      size = (500, 500)
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    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent TopText
      text = The value of this face is:
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Value
      text [set every repeat] = $('%0.2f' %(faceValue))
      pos = (0, -0.75)
      startVal [time (s)] = 3
      font = Helvetica
      letterHeight = 0.1
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    TextComponent continueOn
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 3.5
      font = Helvetica
      letterHeight = 0.07
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  Routine FinalScore
    CodeComponent earn_output_3
      Begin Experiment:
        #earnings = -100
        #newValue = 0
      Begin Routine:
        #theseKeys=""
        #shift_flag = False

        #difference between the input value and the house value
        #currently using input from last frame for current house


        #earnings = abs(long(float(newValue)) - houseValue)
    CodeComponent earningsUpdater_3
      Begin Experiment:
        inputText = ""
        earnings = 0
        earningsUpdate = 0
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('earnings', earnings)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            #for ACCEPTING and starting a new loop
            if theseKeys[i] == 'f':
                earningsUpdate = houseValue + faceValue
                earnings = earnings + earningsUpdate
                continueRoutine = False
                break

            #for REJECTING and starting a new loop
            elif theseKeys[i] == 'j':
                continueRoutine = False
                break

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_5
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_5
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, 0)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.5, 0.3)
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    TextComponent FinalEarnings
      text = FINAL EARNINGS
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.15
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    TextComponent continue4
      text = press any key to continue
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings__3
      text [set every frame] = $('%0.2f' %(earnings))
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.25
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  Routine Part1Complete
    TextComponent instructions
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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      text:
        Please let the RA or experimenter know
        that you have completed Part 1.

        They will start Part 2 for you.
    TextComponent Part2
      text = Part 2: Test
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine trial
    TextComponent Instructions
      text [set every repeat] = $instr
      startVal [time (s)] = 0.3
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent press_key
      text [set every repeat] = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.3
      font = Helvetica
      letterHeight = 0.07
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  Routine Fail
    TextComponent instructions_4
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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      text:
        Your average error is above the
        baseline for continuing in the task.

        Please let the RA or experimenter
        know that you have completed Part 1.
    TextComponent Part2_2
      text = Part 1 Complete
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'xPos': 200L, u'instr': u'Hello.\nIn this experiment we are interested in how people make decisions.', u'congruence': u'consistent', u'yPos': 200L, u'location': u'up_right', u'corrAns': u'h'},
      {u'xPos': 200L, u'instr': u'The experiment should take about 90 minutes.', u'congruence': u'conflicting', u'yPos': 200L, u'location': u'up_right', u'corrAns': u's'},
      {u'xPos': 200L, u'instr': u'In the experiment, you will see images of faces and buildings that have different meanings.\nSome images are associated with winning money. Others are associated with losing money. \n\nDuring this part, you will learn to associate different images with their appropriate outcomes.', u'congruence': u'consistent', u'yPos': 200L, u'location': u'up_right', u'corrAns': u's'},
      {u'xPos': 200L, u'instr': u'You will then be tested to make sure that you have learned the values associated with the different faces and buildings.', u'congruence': u'conflicting', u'yPos': 200L, u'location': u'up_right', u'corrAns': u'h'},
      {u'xPos': -200L, u'instr': u'Make sure you pay attention as you learn about the images, since you will eventually be making choices about them in which you could end up winning or losing money.', u'congruence': u'consistent', u'yPos': 200L, u'location': u'up_left', u'corrAns': u'h'}]
    Routine trial
  LoopTerminator trials
  Routine Part_1
  Routine good_face
  Routine bad_face
  Routine morph_face
  Routine good_house
  Routine bad_house
  Routine morph_house
  Routine PreTestScreen
  LoopInitiator test_faceValue loopType="TrialHandler"
    conditionsFile = part1.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{u'houseImage': u'images/morphs/House03.png', u'word': u'Enter the value of the face:', u'houseValue': 0.61, u'morph': 0L, u'percent': 0L, u'faceValue': 1L, u'faceImage': u'images/morphs/faceMorph1.jpg'},
      {u'houseImage': u'images/morphs/House06.png', u'word': u'Enter the value of the face:', u'houseValue': -0.15, u'morph': 10L, u'percent': 1L, u'faceValue': 0.8, u'faceImage': u'images/morphs/faceMorph10.jpg'},
      {u'houseImage': u'images/morphs/House10.png', u'word': u'Enter the value of the face:', u'houseValue': -1L, u'morph': 21L, u'percent': 2.1, u'faceValue': 0.58, u'faceImage': u'images/morphs/faceMorph21.jpg'},
      {u'houseImage': u'images/morphs/House01.png', u'word': u'Enter the value of the face:', u'houseValue': 1L, u'morph': 32L, u'percent': 3.2, u'faceValue': 0.36, u'faceImage': u'images/morphs/faceMorph32.jpg'},
      {u'houseImage': u'images/morphs/House08.png', u'word': u'Enter the value of the face:', u'houseValue': -0.63, u'morph': 43L, u'percent': 4.3, u'faceValue': 0.14000000000000004, u'faceImage': u'images/morphs/faceMorph43.jpg'},
      {u'houseImage': u'images/morphs/House04.png', u'word': u'Enter the value of the face:', u'houseValue': 0.42, u'morph': 49L, u'percent': 4.9, u'faceValue': 0.019999999999999928, u'faceImage': u'images/morphs/faceMorph49.jpg'},
      {u'houseImage': u'images/morphs/House09.png', u'word': u'Enter the value of the face:', u'houseValue': -0.84, u'morph': 62L, u'percent': 6.2, u'faceValue': -0.24000000000000005, u'faceImage': u'images/morphs/faceMorph62.jpg'}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
    Routine Test
    Routine ActualValue
    Routine testHouse
    Routine ActValueHouse
  LoopTerminator test_faceValue
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = nRepsCorrect
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    Routine Congrats
    Routine Part1Complete
  LoopTerminator trials_2
  Routine Fail
