PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  Save wide csv file = False
  expName = test02_TestSegment
  Screen = 1
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Routines
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  Routine block_number
    KeyboardComponent numberEntry_11
      forceEndRoutine = True
      startVal [time (s)] = 2.
      store = nothing
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    TextComponent multInstr
      text [set every repeat] = "BLOCK #{0}".format($loop_num)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.18
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    TextComponent continue4_7
      text = press any key to continue (when ready)
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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
  Routine test_run_10
    KeyboardComponent exitKeys_3
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent instructions_3
      text = You will now complete 10 example trials.
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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    TextComponent continue9_4
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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  Routine TestInstr_4
    KeyboardComponent exitKeys_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent houseMorph07_3
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $house_df.exemplar[37]
      size = [300,300]
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    TextComponent instructions_6
      text = Each time you PRESS the space bar you will SWAP between the two images until you decide to ACCEPT (press 'f') or REJECT (press 'j') the combination.
      pos = (0, .6)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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    TextComponent houseValue_3
      text [set every repeat] = "House Value = \$%0.2f" % $house_df.value[37]
      pos = (0, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent continue9_7
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.06
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
  Routine TestInstr_1
    KeyboardComponent exitKeys_14
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instructions_9
      pos = (0, .6)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.09
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      text:
        Congratulations on completing the learning phase of the experiment.

        Next we will show you how the actual trials work.
    TextComponent continue9_14
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.06
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    CodeComponent code_26
      Begin Experiment:
        import random
        from random import randint
        import pandas as pd
        import itertools
        inputText = ""

        earnings = 0
        earningsUpdate = 0

        mult1 = 1
        mult2 = 1
        switchMult = 1 #for image switch version

        exp2Trial = 0
        counter = 0

        flipVersion = 1
        posNeg = 1

        # Create House and Face Distributions
        import glob
        face_list = sorted(glob.glob('images/morphs/face/*.jpg'))
        house_list = sorted(glob.glob('images/morphs/house/*.jpg'))

        # create values to match to stimuli
        values = np.arange(-1.,1.01,0.02)
        # REVERSE values
        values = values * -1

        # Get rid of extra digits
        for i in range(len(values)):
            values[i] = round(values[i], 2)

        # Create Data Frames
        house_df = pd.DataFrame(
            {'value': values,
             'exemplar': house_list
            })

        face_df = pd.DataFrame(
            {'value': values,
             'exemplar': face_list
            })

        # Create mult value list
        multipliers = [0.1, 0.5, 1,2,3, 10]
        # Create mult vals distribution
        mult_vals = list(itertools.product(multipliers, multipliers))
        mult_vals = np.repeat(mult_vals, 8, axis=0) # duplicate values * simsPerVal
        extra_base_val = np.repeat([[1,1]], 112, axis=0) # extra instances of base val [1,1] to add up to 120 total

        # append extra 112 base value instances. Result = 30% base value, 70% with multipliers
        # Of those with multipliers: 1/36 of each permutation
        mult_vals_dist = np.append(mult_vals, extra_base_val, axis=0)
        # shuffle the elements
        np.random.shuffle(mult_vals_dist)

        # create mult val counter
        mult_val_counter = 25   # this is just for the test trials
                                # it is reset to 0 after the test trials

        #For alternating the image
        trialImage = '/Users/djw/Dropbox/PHD/CENDRI/Project/Code/LabSharedFolder/MADE01/CODE/v3_FractionalWeights/images/morphs/face/faceMorph000.jpg' # this just initializes an image
        imageSelector = randint(1,2)
  Routine TestInstr_2
    KeyboardComponent exitKeys_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent faceMorph_50
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = $face_df.exemplar[75]
      size = (300,300)
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    ImageComponent houseMorph_neg25
      pos = (250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = $house_df.exemplar[37]
      size = [300,300]
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    TextComponent instructions_2
      pos = (0, .65)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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      text:
        You will need to consider the SUM of the two values in order to decide whether you ACCEPT or REJECT the combination.

        In this case the combined value of the two images is: \$0.50 - \$0.26 = \$0.24.
    TextComponent faceValueText_2
      text [set every repeat] = "\$%0.2f" % $face_df.value[75]
      pos = (-0.4, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent houseValue_2
      text [set every repeat] = "\$%0.2f" % $house_df.value[37]
      pos = (0.4, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent compValues_2
      text = Therefore it would make sense to ACCEPT this combination.
      pos = (0, -.65)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent continue9_3
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.06
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  Routine TestInstr_3
    KeyboardComponent exitKeys_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent faceMorph05
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $face_df.exemplar[75]
      size = (300,300)
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    TextComponent instructions_5
      pos = (0, .65)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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      text:
        However you will only see one image at a time.

        Look at the first image (in this case the face), calculate the value, then press the SPACE BAR to view the other image.
    TextComponent faceValueText
      text [set every repeat] = "Face Value = \$%0.2f" % $face_df.value[75]
      pos = (0, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent continue9_6
      text = press the SPACE BAR to see the second image
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.06
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  Routine trial_run_test
    CodeComponent earningsUpdater_7
      Begin Routine:
        theseKeys=""
        shift_flag = False
        #inputTextValue.alignHoriz = 'center'

        #Count Trials
        counter = counter + 1

        #For alternating the image
        imageSelector = randint(1,2)
        #Save the image that we start with
        viewedImage = imageSelector%2
        imageList = [viewedImage]

        #flipChoice OFF
        flip = False

        #Pick random value for House and Face morph
        #This means the trials are randomized WITH replacement
        randFace = random.randint(0,100) # this INCLUDES 100
        randHouse = random.randint(0,100)

        #Create filepath for image
        trialFace = face_df.exemplar[randFace]
        trialHouse = house_df.exemplar[randHouse]

        #Calculate monetary value based on morph value
        actFaceVal = face_df.value[randFace]
        actHouseVal = house_df.value[randHouse]

        # Take value from mult distribution based on counter
        mult1 = mult_vals_dist[mult_val_counter][0]
        mult2 = mult_vals_dist[mult_val_counter][1]

        mult_val_counter = mult_val_counter + 1
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('Trial', counter)
        thisExp.addData('correct', correct)
        thisExp.addData('faceVal', actFaceVal)
        thisExp.addData('houseVal', actHouseVal)
        thisExp.addData('mult1House', mult1)
        thisExp.addData('mult2Face', mult2)
        thisExp.addData('summedVal', earningsUpdate)
        thisExp.addData('earnings', earnings)
        thisExp.addData('imageList', imageList)

        inputText=""

        #done with the next routine
        #if exp2Trial>=200:
        #    trials_2.finished=1
      Each Frame:
        n = len(theseKeys)
        i = 0

        #For alternating the image & multiplier
        if imageSelector%2==0:
            trialImage = face_df.exemplar[randFace]
            switchMult = str(mult2)
        if imageSelector%2==1:
            trialImage = house_df.exemplar[randHouse]
            switchMult = str(mult1)

        ####################
        # KEY STROKE INPUT #
        ####################
        while i < n:
            if theseKeys[i] == 'space':
                imageSelector +=1
                viewedImage = imageSelector%2
                imageList.append(viewedImage)

            #for ACCEPTING and starting a new loop
            if theseKeys[i] == 'f':
                earningsUpdate = actHouseVal*mult1 + actFaceVal*mult2
                if earningsUpdate >=0:
                    correct=1
                else:
                    correct=0
                earnings = earnings + earningsUpdate
                winLoss=earningsUpdate
                continueRoutine = False
                break

            #for REJECTING and starting a new loop
            elif theseKeys[i] == 'j':
                earningsUpdate = actHouseVal*mult1 + actFaceVal*mult2
                if earningsUpdate >0:
                    correct=0
                    winLoss= -1*earningsUpdate
                    earnings = earnings - earningsUpdate
                    continueRoutine = False
                else:
                    correct=1
                    winLoss= 0.00
                    continueRoutine = False
                break

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry
      forceEndRoutine = False
      allowedKeys = "f", "j", "space"
      startVal [time (s)] = 0.1
      store = all keys
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    PolygonComponent square_entry
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0
      size [set every repeat] = (0.25, 0.15)
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    TextComponent Accept_Reject_3
      text = Do you accept or reject this combination?
      pos = (0, 0.82)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest
      text = enter 'f' for accept, and 'j' for reject
      pos = (0, -.9)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings__4
      text [set every repeat] = $('\$%0.2f' %(earnings))
      pos = (0, -0.75)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.1
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    ImageComponent SWITCH_Image2_2
      pos = (0, 20)
      units = pix
      startVal [time (s)] = 0
      image [set every frame] = $trialImage
      size = (450, 450)
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    TextComponent EarningsLabel_3
      text = total earnings
      pos = (0, -0.6)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.08
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    TextComponent SWITCH_Mult_2
      color = black
      text [set every frame] = "x {0}".format($switchMult)
      pos = (0, 0.64)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.15
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    TextComponent press_space
      pos = (0.6, 0.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press SPACE to see
        the OTHER IMAGE.
  Routine Block02_a
    CodeComponent earningsUpdater_4
    KeyboardComponent numberEntry_6
      forceEndRoutine = True
      startVal [time (s)] = 2.
      store = nothing
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    TextComponent continue4_2
      text = press any key to continue
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent FinishedPart1
      pos = (0, 0.1)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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      text:
        This is the end of the example trials.

        If you do not understand how the experiment works that is okay - just please LET THE RA KNOW.
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  Routine Block02_b
    CodeComponent earningsUpdater_5
      Begin Routine:
        loop_num = 1
    KeyboardComponent numberEntry_10
      forceEndRoutine = True
      startVal [time (s)] = 2.
      store = nothing
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    TextComponent multInstr_5
      pos = (0, 0.1)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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      text:
        We will now begin the REAL TRIALS.

        There will be FOUR sets of 100 trials.

        We will SHOW you the HOUSE and FACE VALUES before each block of trials.

        CONCENTRATE: the more accurate you are, the more money you earn.
    TextComponent continue4_6
      text = press any key to continue
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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  Routine FullTest_01_Mult
    CodeComponent earningsUpdater_2
      Begin Routine:
        theseKeys=""
        shift_flag = False
        #inputTextValue.alignHoriz = 'center'

        #Count Trials
        counter = counter + 1

        #For alternating the image
        imageSelector = randint(1,2)
        #Save the image that we start with
        viewedImage = imageSelector%2
        imageList = [viewedImage]

        #flipChoice OFF
        flip = False

        #Pick random value for House and Face morph
        #This means the trials are randomized WITH replacement
        randFace = random.randint(0,100) # this INCLUDES 100
        randHouse = random.randint(0,100)

        #Create filepath for image
        trialFace = face_df.exemplar[randFace]
        trialHouse = house_df.exemplar[randHouse]

        #Calculate monetary value based on morph value
        actFaceVal = face_df.value[randFace]
        actHouseVal = house_df.value[randHouse]

        # Take value from mult distribution based on counter
        mult1 = mult_vals_dist[mult_val_counter][0]
        mult2 = mult_vals_dist[mult_val_counter][1]

        mult_val_counter = mult_val_counter + 1
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('Trial', counter)
        thisExp.addData('correct', correct)
        thisExp.addData('faceVal', actFaceVal)
        thisExp.addData('houseVal', actHouseVal)
        thisExp.addData('mult1House', mult1)
        thisExp.addData('mult2Face', mult2)
        thisExp.addData('summedVal', earningsUpdate)
        thisExp.addData('earnings', earnings)
        thisExp.addData('imageList', imageList)

        inputText=""

        #done with the next routine
        #if exp2Trial>=200:
        #    trials_2.finished=1
      Each Frame:
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    KeyboardComponent numberEntry_4
      forceEndRoutine = False
      allowedKeys = "f", "j", "space"
      startVal [time (s)] = 0.1
      store = all keys
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    PolygonComponent square_entry_4
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0
      size [set every repeat] = (0.25, 0.15)
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    TextComponent Accept_Reject_2
      text = Do you accept or reject this combination?
      pos = (0, 0.82)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest_4
      text = enter 'f' for accept, and 'j' for reject
      pos = (0, -.9)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings__2
      text [set every repeat] = $('\$%0.2f' %(earnings))
      pos = (0, -0.75)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.1
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    ImageComponent SWITCH_Image2
      pos = (0, 20)
      units = pix
      startVal [time (s)] = 0
      image [set every frame] = $trialImage
      size = (450, 450)
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    TextComponent EarningsLabel_2
      text = total earnings
      pos = (0, -0.6)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.08
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    TextComponent SWITCH_Mult
      color = black
      text [set every frame] = "x {0}".format($switchMult)
      pos = (0, 0.64)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.15
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
  Routine FixationCross
    TextComponent FixationCrossJitter
      text = +
      stopVal [time (s)] = 3
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    CodeComponent code_5
      Begin Experiment:
        import random
      Each Frame:
        core.wait(random.uniform(0.0, 0.8))
        break
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
  Routine FinalScore
    CodeComponent code_25
    KeyboardComponent numberEntry_5
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      store = nothing
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    TextComponent FinalEarnings
      text = FINAL EARNINGS
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.15
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    PolygonComponent square_entry_5
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -0.4)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.7, 0.3)
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    TextComponent earnings__3
      text [set every repeat] = $('\$%0.2f' %(earnings))
      pos = (0, -0.4)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.25
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    TextComponent test_earnings
      color = black
      text [set every repeat] = "Test Earnings: \${0}".format($earnings)
      pos = (0, 0.15)
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent total_earnings
      color = black
      text = TOTAL
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      letterHeight = 0.13
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    TextComponent continue4
      text = TELL THE EXPERIMENTER YOU HAVE FINISHED
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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
  Routine Feedback_Block2
    TextComponent amount_2
      text [set every repeat] = $('\$%0.2f' %(winLoss))
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_4
      Begin Routine:
        if winLoss >= 0.0:
            correct = "CORRECT"
            correctColor = "green"
        else:
            correct = "INCORRECT"
            correctColor = "red"
      End Routine:
        # Run trial blocks of 100
        if counter>=100 and loop_num == 4: # change to 100
            counter = 0
            trials_2.finished=1
            trial_blocks.finished=1

        elif counter>=100: #change to 100
            counter =0
            loop_num = loop_num + 1
            trials_2.finished=1
    TextComponent text_13
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1.5
      font = Helvetica
      letterHeight = 0.2
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    TextComponent text_14
      text = Trial Earnings
      stopVal [duration (s)] = 1.5
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Correct_wrong2
      color [set every repeat] = $correctColor
      text [set every repeat] = $correct
      stopVal [duration (s)] = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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
  Routine Test1_WinLoss
    TextComponent amount
      text [set every repeat] = $('\$%0.2f' %(winLoss))
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    CodeComponent code_3
      Begin Routine:
        if winLoss >= 0.0:
            correct = "CORRECT"
            correctColor = "green"
        else:
            correct = "INCORRECT"
            correctColor = "red"
      End Routine:
        if counter>=10:  # number of demo trials
            counter = 0
            earnings = 0
            mult_val_counter = 0
            test.finished=1
    TextComponent text_12
      text = Trial Earnings:
      stopVal [duration (s)] = 1.5
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    TextComponent text_10
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1.5
      font = Helvetica
      letterHeight = 0.2
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    TextComponent correct_wrong
      color [set every repeat] = $correctColor
      text [set every repeat] = $correct
      stopVal [duration (s)] = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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  Routine one_more_thing
    KeyboardComponent exitKeys_24
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent instructions_17
      text = ONE MORE THING!
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    TextComponent continue9_24
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent multipliers
      text = MULTIPLIERS
      startVal [time (s)] = 1
      letterHeight = 0.15
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  Routine mult_instructions
    KeyboardComponent exitKeys_23
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent faceMorph
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = $face_df.exemplar[75]
      size = (300,300)
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    ImageComponent house_neg25_2
      pos = (250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = $house_df.exemplar[37]
      size = [300,300]
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    TextComponent instructions_16
      pos = (0, .7)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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      text:
        Multipliers can change the value of the image on a trial-by-trial basis.

        In this example the HOUSE image has a multiplier of 3 and the FACE image has a multiplier of 1.
    TextComponent faceValueText_3
      text [set every repeat] = "\${0}\nValue with Mult. = \${1}".format($face_df.value[75], face_df.value[75])
      pos = (-0.35, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent houseValue
      text [set every repeat] = "\${0}\nValue with Mult. = \${1}".format($house_df.value[37], house_df.value[37] * 3)
      pos = (0.35, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent compValues
      text = Because of the MULTIPLIERS it would make sense to REJECT this combination as the SUMMED VALUE (\$0.50 - \$0.26 * 3) is -\$0.28.
      pos = (0, -.7)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent continue9_23
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.06
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    TextComponent x_1
      color = black
      text = x 1
      pos = (-0.33, 0.43)
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent x_3
      color = black
      text = x 3
      pos = (0.33, 0.43)
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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
Flow
  Routine TestInstr_1
  Routine TestInstr_2
  Routine TestInstr_3
  Routine TestInstr_4
  Routine one_more_thing
  Routine mult_instructions
  Routine test_run_10
  LoopInitiator test loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine FixationCross
    Routine trial_run_test
    Routine Test1_WinLoss
  LoopTerminator test
  Routine Block02_a
  Routine Block02_b
  LoopInitiator trial_blocks loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine block_number
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 200
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      Routine FixationCross
      Routine FullTest_01_Mult
      Routine Feedback_Block2
    LoopTerminator trials_2
  LoopTerminator trial_blocks
  Routine FinalScore
