PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = test01
  Units = use prefs
  Screen = 1
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Routines
  Routine FullTest_01
    CodeComponent earn_output
      Begin Experiment:
        #earnings = -100
        #newValue = 0
      Begin Routine:
        #theseKeys=""
        #shift_flag = False

        #difference between the input value and the house value
        #currently using input from last frame for current house


        #earnings = abs(long(float(newValue)) - houseValue)
    CodeComponent earningsUpdater
      Begin Experiment:
        inputText = ""
        earnings = 0
        earningsUpdate = 0
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('earnings', earnings)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            #for ACCEPTING and starting a new loop
            if theseKeys[i] == 'f':
                earningsUpdate = houseValue + faceValue
                earnings = earnings + earningsUpdate
                continueRoutine = False
                break

            #for REJECTING and starting a new loop
            elif theseKeys[i] == 'j':
                continueRoutine = False
                break

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_3
      forceEndRoutine = False
      allowedKeys = "f", "j"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_3
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent Accept_Reject
      text = Do you accept or reject this combination?
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest_3
      text = enter 'f' for accept, and 'j' for reject
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings_
      text [set every frame] = $('%0.2f' %(earnings))
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Fixation_3
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    ImageComponent face_test
      pos = (250, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $faceImage
      size = (360, 360)
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    ImageComponent houses_2
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $houseImage
      size = (480, 360)
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    TextComponent EarningsLabel
      text = earnings
      pos = (0, -0.6)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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  Routine PreLearnScreen
    TextComponent to_continue_3
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Learn
      text = Part 1: Faces
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore_2
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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      text:
        You will be shown a face: try to guess the value in your head.

        After a couple of seconds you will be shown the actual value.

        See how close to the actual value you can get.

        There are 10 trials.
  Routine routine_01_Instr01
    ImageComponent image
      units = pix
      startVal [time (s)] = 0.0
      image = images/man01.png
      size = [500,500]
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    TextComponent text_2
      text = This face is worth 5.00 dollars
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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  Routine Congrats
    TextComponent to_continue_5
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Learn_3
      text = Congratulations
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore_4
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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      text:
        You have accurately stated the values of the faces and houses.

        Now we will move on to Part 2.
  Routine PreLearnScreen2
    TextComponent to_continue_4
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Learn_2
      text = Part 1: Houses
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_13
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore_3
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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      text:
        You will be shown a house: try to guess the value in your head.

        After a couple of seconds you will be shown the actual value.

        See how close to the actual value you can get.

        There are 10 trials.
  Routine houseLearnInstr
    ImageComponent House01
      pos = (300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/morphs/House10.png
      size = [240,180]
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    TextComponent text_9
      text = Also, houses and "combinations" of two houses will give different values.
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent continue9
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    ImageComponent man01_2
      pos = (-300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/morphs/House01.png
      size = (240,180)
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    ImageComponent man_morph50_2
      units = pix
      startVal [time (s)] = 3
      image = images/morphs/House05.png
      size = (240,180)
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    TextComponent text_11
      text = 5.00 dollars
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent minus5_2
      text = -5.00 dollars
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent zeroDollar_2
      text = 0.00 dollars
      pos = (0, -0.4)
      startVal [time (s)] = 3.0
      font = Helvetica
      letterHeight = 0.07
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  Routine var_01_Instr_02
    ImageComponent image_2
      units = pix
      startVal [time (s)] = 0.0
      image = images/man02.png
      size = [500,500]
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    TextComponent text_4
      text = This face is worth -5.00 dollars
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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  Routine TestInstr
    KeyboardComponent exitKeys
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instructions
      text = Please let the RA or experimenter know that you have completed Part 1 and are ready to proceed to Part 2.
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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    TextComponent continue9_2
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part2
      text = Part 2: Test
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine Part1_Houses
    ImageComponent House_morphs
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $houseImage
      size = (480, 360)
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    TextComponent fixation_2
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent TopText_2
      text = The value of this house is:
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Value_2
      text [set every repeat] = $('%0.2f' %(houseValue))
      pos = (0, -0.75)
      startVal [time (s)] = 3
      font = Helvetica
      letterHeight = 0.1
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    TextComponent continueOn_2
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 3.5
      font = Helvetica
      letterHeight = 0.07
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  Routine trial
    TextComponent Instructions
      text [set every repeat] = $instr
      startVal [time (s)] = 0.3
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent press_key
      text [set every repeat] = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.3
      font = Helvetica
      letterHeight = 0.07
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  Routine Part_1_Faces
    ImageComponent face_morphs
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $faceImage
      size = (500, 500)
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    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent TopText
      text = The value of this face is:
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Value
      text [set every repeat] = $('%0.2f' %(faceValue))
      pos = (0, -0.75)
      startVal [time (s)] = 3
      font = Helvetica
      letterHeight = 0.1
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    TextComponent continueOn
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 3.5
      font = Helvetica
      letterHeight = 0.07
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  Routine testHouse
    CodeComponent code_2
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            if theseKeys[i] == 'return' and len(inputText) > 3:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1] #lose the final character
                i = i + 1

            elif theseKeys[i] == 'period':
                inputText  = inputText + "."
                i = i+1

            elif theseKeys[i] == 'minus':
                inputText  = inputText + "-"
                i = i+1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_2
      forceEndRoutine = False
      allowedKeys = "1", "2", "3","4","5","6","7","8","9","0",".", "backspace", "period", "return", "-", "minus"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_2
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent EnterValue_2
      text = Enter the value for this house
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest_2
      text = after you enter a value press 'return'
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent inputTextValue_2
      text [set every frame] = $inputText
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    ImageComponent houses
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $houseImage
      size = (480, 360)
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    TextComponent useFormat_2
      text = Use the format X.XX (e.g. 2.50)
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Fixation_2
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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  Routine ActValueHouse
    TextComponent ActVal_2
      color [set every repeat] = white
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.2
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.15
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      text [set every repeat]:
        $houseValue
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent continue3_2
      text = press any key to contine
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent ActualValueText_2
      text = Actual value was:
      pos = (0, .2)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.1
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    TextComponent youSaid_2
      text [set every repeat] = $inputText
      startVal [time (s)] = 1
      font = Helvetica
      letterHeight = 0.08
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  Routine ActualValue
    TextComponent ActVal
      color [set every repeat] = white
      text [set every repeat] = $('0.2f' %(faceValue))
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.2
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.15
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent continue3
      text = press any key to contine
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent ActualValueText
      text = Actual value was:
      pos = (0, .2)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.1
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    TextComponent youSaid
      text [set every repeat] = $inputText
      startVal [time (s)] = 1
      font = Helvetica
      letterHeight = 0.08
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  Routine FullTest_01_Mult
    CodeComponent earn_output_2
      Begin Experiment:
        #earnings = -100
        #newValue = 0
      Begin Routine:
        #theseKeys=""
        #shift_flag = False

        #difference between the input value and the house value
        #currently using input from last frame for current house


        #earnings = abs(long(float(newValue)) - houseValue)
    CodeComponent earningsUpdater_2
      Begin Experiment:
        inputText = ""
        earnings = 0
        earningsUpdate = 0
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('earnings', earnings)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            #for ACCEPTING and starting a new loop
            if theseKeys[i] == 'f':
                earningsUpdate = houseValue + faceValue
                earnings = earnings + earningsUpdate
                continueRoutine = False
                break

            #for REJECTING and starting a new loop
            elif theseKeys[i] == 'j':
                continueRoutine = False
                break

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry_4
      forceEndRoutine = False
      allowedKeys = "f", "j"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry_4
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent Accept_Reject_2
      text = Do you accept or reject this combination?
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest_4
      text = enter 'f' for accept, and 'j' for reject
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent earnings__2
      text [set every frame] = $('%0.2f' %(earnings))
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent Fixation_4
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    ImageComponent face_test_2
      pos = (250, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $faceImage
      size = (360, 360)
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    ImageComponent houses_3
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $houseImage
      size = (480, 360)
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    TextComponent EarningsLabel_2
      text = earnings
      pos = (0, -0.6)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.08
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  Routine Test
    CodeComponent code
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        inputTextValue.alignHoriz = 'center'
      End Routine:
        #let's store the final text string into the results final...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:
            if theseKeys[i] == 'return' and len(inputText) > 3:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1] #lose the final character
                i = i + 1

            elif theseKeys[i] == 'period':
                inputText  = inputText + "."
                i = i+1

            elif theseKeys[i] == 'minus':
                inputText  = inputText + "-"
                i = i+1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i+1

            else:
                if len(theseKeys[i]) ==1:
                    #we only have 1 char so should be a normal key
                    #otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]
                i = i + 1
    KeyboardComponent numberEntry
      forceEndRoutine = False
      allowedKeys = "1", "2", "3","4","5","6","7","8","9","0",".", "backspace", "period", "return", "-", "minus"
      startVal [time (s)] = 0.7
      store = all keys
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    PolygonComponent square_entry
      opacity [set every repeat] = 1
      fillColor = $[-1.000,-1.000,-1.000]
      pos [set every repeat] = (0, -.75)
      lineWidth [set every repeat] = 1
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.5
      size [set every repeat] = (0.25, 0.15)
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    TextComponent EnterValue
      text = Enter the value for this face
      pos = (0, 0.85)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    TextComponent nextTrialTest
      text = after you enter a value press 'return'
      pos = (0, -.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent inputTextValue
      text [set every frame] = $inputText
      pos = (0, -0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.1
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    ImageComponent faces
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $faceImage
      size = (500, 500)
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    TextComponent useFormat
      text = Use the format X.XX (e.g. 2.50)
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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  Routine Part_1
    TextComponent to_continue
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent text
      text = Part 1: Learning
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine PreTestScreen
    TextComponent to_continue_2
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.07
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    TextComponent Part1Test
      text = Part 1: Test
      pos = (0, 0.6)
      startVal [time (s)] = 0.2
      font = Helvetica
      letterHeight = 0.2
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent minScore
      pos = (0, -.2)
      startVal [time (s)] = 0.5
      letterHeight = 0.08
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      text:
        You need to acheive an average answer that is within 0.50 dollars of the actual value.

        If you do not succeed you will need to go back to training and then take the test again.

        There are 20 trials.
  Routine var_01_Instr_03
    ImageComponent man02
      pos = (300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/man02.png
      size = [250,250]
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    TextComponent text_6
      text = Combination of the two faces will give different "values".
      pos = (0, .80)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    ImageComponent man01
      pos = (-300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/man01.png
      size = (250,250)
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    ImageComponent man_morph50
      units = pix
      startVal [time (s)] = 3
      image = images/morphs/09.png
      size = (250,250)
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    TextComponent text_8
      text = 5.00 dollars
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent minus5
      text = -5.00 dollars
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent zeroDollar
      text = 0.00 dollars
      pos = (0, -0.4)
      startVal [time (s)] = 3.0
      font = Helvetica
      letterHeight = 0.07
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  Routine TestInstr_2
    KeyboardComponent exitKeys_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent faceMorph05_2
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/morphs/05.png
      size = (300,300)
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    ImageComponent houseMorph07_2
      pos = (250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = images/morphs/House07.png
      size = [400,300]
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    TextComponent instructions_2
      text = In this case the combined value of the two images is: 2.90 -1.95 = 0.95.
      pos = (0, .6)
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.09
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    TextComponent faceValueText_2
      text = 2.90 dollars
      pos = (-0.4, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent houseValue_2
      text = -1.95 dollars
      pos = (0.4, -0.44)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent compValues_2
      text = Therefore it would make sense to accept this combination.
      pos = (0, -.65)
      startVal [time (s)] = 0
      font = Helvetica
      letterHeight = 0.07
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    TextComponent continue9_3
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.06
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  Routine TestInstr_3
    KeyboardComponent exitKeys_3
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instructions_3
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.08
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      text:
        The test will now begin.

        Try to accumulate as much money as possible.


        There will be 20 trials.
    TextComponent continue9_4
      text = press any key to continue
      pos = (0, -0.9)
      startVal [time (s)] = 0.5
      font = Helvetica
      letterHeight = 0.07
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Flow
  LoopInitiator test loopType="TrialHandler"
    conditionsFile = part1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'houseImage': u'images/morphs/House03.png', u'word': u'Enter the value of the face:', u'houseValue': 3.05, u'morph': 0L, u'percent': 0L, u'faceValue': 5L, u'faceImage': u'images/morphs/01.png'},
      {u'houseImage': u'images/morphs/House06.png', u'word': u'Enter the value of the face:', u'houseValue': -0.75, u'morph': 10L, u'percent': 1L, u'faceValue': 4L, u'faceImage': u'images/morphs/03.png'},
      {u'houseImage': u'images/morphs/House10.png', u'word': u'Enter the value of the face:', u'houseValue': -5L, u'morph': 21L, u'percent': 2.1, u'faceValue': 2.9, u'faceImage': u'images/morphs/05.png'},
      {u'houseImage': u'images/morphs/House01.png', u'word': u'Enter the value of the face:', u'houseValue': 5L, u'morph': 32L, u'percent': 3.2, u'faceValue': 1.7999999999999998, u'faceImage': u'images/morphs/07.png'},
      {u'houseImage': u'images/morphs/House08.png', u'word': u'Enter the value of the face:', u'houseValue': -3.15, u'morph': 43L, u'percent': 4.3, u'faceValue': 0.7000000000000002, u'faceImage': u'images/morphs/09.png'},
      {u'houseImage': u'images/morphs/House04.png', u'word': u'Enter the value of the face:', u'houseValue': 2.1, u'morph': 49L, u'percent': 4.9, u'faceValue': 0.09999999999999964, u'faceImage': u'images/morphs/10.png'},
      {u'houseImage': u'images/morphs/House09.png', u'word': u'Enter the value of the face:', u'houseValue': -4.2, u'morph': 62L, u'percent': 6.2, u'faceValue': -1.2000000000000002, u'faceImage': u'images/morphs/12.png'}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
    Routine FullTest_01
  LoopTerminator test
  Routine TestInstr
  Routine TestInstr_2
  Routine TestInstr_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'xPos': 200L, u'instr': u'Hello', u'congruence': u'consistent', u'yPos': 200L, u'location': u'up_right', u'corrAns': u'h'},
      {u'xPos': 200L, u'instr': u'What', u'congruence': u'conflicting', u'yPos': 200L, u'location': u'up_right', u'corrAns': u's'},
      {u'xPos': 200L, u'instr': u'Is', u'congruence': u'consistent', u'yPos': 200L, u'location': u'up_right', u'corrAns': u's'},
      {u'xPos': 200L, u'instr': u'This', u'congruence': u'conflicting', u'yPos': 200L, u'location': u'up_right', u'corrAns': u'h'},
      {u'xPos': -200L, u'instr': u'Doing?', u'congruence': u'consistent', u'yPos': 200L, u'location': u'up_left', u'corrAns': u'h'}]
    Routine trial
  LoopTerminator trials
  Routine Part_1
  Routine routine_01_Instr01
  Routine var_01_Instr_02
  Routine var_01_Instr_03
  Routine PreLearnScreen
  LoopInitiator learn_faceValue loopType="TrialHandler"
    conditionsFile = part1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': 5L, u'morph': 0L, u'percent': 0L, u'faceValue': 5L, u'faceImage': u'images/morphs/01.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': 4.2, u'morph': 10L, u'percent': 1L, u'faceValue': 4L, u'faceImage': u'images/morphs/03.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': 3.05, u'morph': 21L, u'percent': 2.1, u'faceValue': 2.9, u'faceImage': u'images/morphs/05.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': 2.1, u'morph': 32L, u'percent': 3.2, u'faceValue': 1.7999999999999998, u'faceImage': u'images/morphs/07.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': 1.25, u'morph': 43L, u'percent': 4.3, u'faceValue': 0.7000000000000002, u'faceImage': u'images/morphs/09.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': -0.75, u'morph': 49L, u'percent': 4.9, u'faceValue': 0.09999999999999964, u'faceImage': u'images/morphs/10.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': -1.95, u'morph': 62L, u'percent': 6.2, u'faceValue': -1.2000000000000002, u'faceImage': u'images/morphs/12.png'}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
    Routine Part_1_Faces
  LoopTerminator learn_faceValue
  Routine houseLearnInstr
  Routine PreLearnScreen2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = part1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': 5L, u'morph': 0L, u'percent': 0L, u'faceValue': 5L, u'faceImage': u'images/morphs/01.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': 4.2, u'morph': 10L, u'percent': 1L, u'faceValue': 4L, u'faceImage': u'images/morphs/03.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': 3.05, u'morph': 21L, u'percent': 2.1, u'faceValue': 2.9, u'faceImage': u'images/morphs/05.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': 2.1, u'morph': 32L, u'percent': 3.2, u'faceValue': 1.7999999999999998, u'faceImage': u'images/morphs/07.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': 1.25, u'morph': 43L, u'percent': 4.3, u'faceValue': 0.7000000000000002, u'faceImage': u'images/morphs/09.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': -0.75, u'morph': 49L, u'percent': 4.9, u'faceValue': 0.09999999999999964, u'faceImage': u'images/morphs/10.png'},
      {u'houseImage': u'images/morphs/House0.png', u'word': u'Enter the value of the face:', u'houseValue': -1.95, u'morph': 62L, u'percent': 6.2, u'faceValue': -1.2000000000000002, u'faceImage': u'images/morphs/12.png'}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
    Routine Part1_Houses
  LoopTerminator trials_2
  Routine PreTestScreen
  LoopInitiator test_faceValue loopType="TrialHandler"
    conditionsFile = part1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'houseImage': u'images/morphs/House03.png', u'word': u'Enter the value of the face:', u'houseValue': 3.05, u'morph': 0L, u'percent': 0L, u'faceValue': 5L, u'faceImage': u'images/morphs/01.png'},
      {u'houseImage': u'images/morphs/House06.png', u'word': u'Enter the value of the face:', u'houseValue': -0.75, u'morph': 10L, u'percent': 1L, u'faceValue': 4L, u'faceImage': u'images/morphs/03.png'},
      {u'houseImage': u'images/morphs/House10.png', u'word': u'Enter the value of the face:', u'houseValue': -5L, u'morph': 21L, u'percent': 2.1, u'faceValue': 2.9, u'faceImage': u'images/morphs/05.png'},
      {u'houseImage': u'images/morphs/House01.png', u'word': u'Enter the value of the face:', u'houseValue': 5L, u'morph': 32L, u'percent': 3.2, u'faceValue': 1.7999999999999998, u'faceImage': u'images/morphs/07.png'},
      {u'houseImage': u'images/morphs/House08.png', u'word': u'Enter the value of the face:', u'houseValue': -3.15, u'morph': 43L, u'percent': 4.3, u'faceValue': 0.7000000000000002, u'faceImage': u'images/morphs/09.png'},
      {u'houseImage': u'images/morphs/House04.png', u'word': u'Enter the value of the face:', u'houseValue': 2.1, u'morph': 49L, u'percent': 4.9, u'faceValue': 0.09999999999999964, u'faceImage': u'images/morphs/10.png'},
      {u'houseImage': u'images/morphs/House09.png', u'word': u'Enter the value of the face:', u'houseValue': -4.2, u'morph': 62L, u'percent': 6.2, u'faceValue': -1.2000000000000002, u'faceImage': u'images/morphs/12.png'}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
    Routine Test
    Routine ActualValue
    Routine testHouse
    Routine ActValueHouse
  LoopTerminator test_faceValue
  Routine Congrats
  Routine TestInstr
