PsychoPy2experiment version="1.84.1"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = v01
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      color [set every repeat] = $colour
      text [set every repeat] = $word
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.5
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Remember, choose the colour of the letters, ignoring the word.

        left = red
        down = green
        right = blue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'colour': u'red', u'word': u'red', u'congruent': 1.0, u'corrAns': u'left'},
      {u'colour': u'green', u'word': u'red', u'congruent': 0.0, u'corrAns': u'down'},
      {u'colour': u'green', u'word': u'green', u'congruent': 1.0, u'corrAns': u'down'},
      {u'colour': u'blue', u'word': u'green', u'congruent': 0.0, u'corrAns': u'right'},
      {u'colour': u'blue', u'word': u'blue', u'congruent': 1.0, u'corrAns': u'right'},
      {u'colour': u'red', u'word': u'blue', u'congruent': 0.0, u'corrAns': u'left'}]
    Routine trial
  LoopTerminator trials
